begintemplate MPPCell

public pp, connect2target, gid, is_art
public x, y, z, position, xpos, ypos, zpos
objref vs, spikevect

proc init() { local status localobj ff strdef datasetPath, spikedataPath, cmd
    gid = $1
    datasetPath = $s3
    
    vs = new VecStim()
    spikevect = new Vector()
    sprint(spikedataPath,"%s/%d.dat",datasetPath,gid)
    sprint(cmd, "test -e %s", spikedataPath) // check if the path exists
    status = system(cmd)
    if (status == 0) {
        ff = new File()
        ff.ropen(spikedataPath)
        spikevect.scanf(ff)
        ff.close()
        vs.play(spikevect)
    }
}

func is_art() {return 1}


obfunc connect2target() { // $o1 target point process, optional $o2 returned NetCon
  $o2 = new NetCon(pp, $o1)
  return $o2
}

proc setposition(){
    x = $1  y = $2  z = $3	
    xpos = $1  ypos = $2  zpos = $3	
    pp.position(xpos, ypos, zpos)
}

endtemplate MPPCell
